CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:full_stack
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth Multichannel:[module_num:5|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notes:['Filter to remove outliers (of 1px).']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
    Select the input image:full_stack
    Name the output image:full_stack
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

RescaleIntensity:[module_num:6|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notes:['As It wont allow saving data without rescaling - divide data by 100000.']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
    Select the input image:full_stack
    Name the output image:full_stack
    Rescaling method:Divide each image by the same value
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    Divisor value:100000
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
Smooth Multichannel:[module_num:7|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notes:['Filter to remove outliers (of 1px).']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
    Select the input image:full_stack
    Name the output image:full_stack
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:8|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notes:['Filter to remove outliers (of 1px).']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
    Select the input image:full_stack
    Name the output image:full_stack
    Select smoothing method:Median Filter Scipy
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

SaveImages:[module_num:9|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notes:['Save with median filter (no need to rescale to save but maybe good to just rescale everything ready for next pipeline step?).']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
    Select the type of image to save:Image
    Select the image to save:full_stack
    Select method for constructing file names:From image filename
    Select image name for file prefix:full_stack
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|/Users/valandk/Karishma/CellProfilerPipelines/BasicPipelinePlugins/new
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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