CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Names must begin with ASCI letters or underbar (not digits).']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:24
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "191Ir")
    Name to assign these images:DNA1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "193Ir")
    Name to assign these images:DNA2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "89Y")
    Name to assign these images:_89Y
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does contain "150Nd")
    Name to assign these images:_150Nd
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "176Yb")
    Name to assign these images:_176Yb
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "165Ho")
    Name to assign these images:_165Ho
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "152Sm")
    Name to assign these images:_152Sm
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "141Pr")
    Name to assign these images:_141Pr
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "142Nd")
    Name to assign these images:_142Nd
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "146Nd")
    Name to assign these images:_146Nd
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "147Sm")
    Name to assign these images:_147Sm
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "148Nd")
    Name to assign these images:_148Nd
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "151Eu")
    Name to assign these images:_151Eu
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "154Sm")
    Name to assign these images:_154Sm
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "156Gd")
    Name to assign these images:_156Gd
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "161Dy")
    Name to assign these images:_161Dy
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "164Dy")
    Name to assign these images:_164Dy
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "168Er")
    Name to assign these images:_168Er
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "169Tm")
    Name to assign these images:_169Tm
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "172Yb")
    Name to assign these images:_172Yb
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "173Yb")
    Name to assign these images:_173Yb
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "209Bi")
    Name to assign these images:_209Bi
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_Probabilities") (or (file does contain "_0"))
    Name to assign these images:prob_membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_Probabilities") (or (file does contain "_2"))
    Name to assign these images:prob_background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA1
    Name the output image:ReDNA1
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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
RescaleIntensity:[module_num:6|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
    Select the input image:DNA2
    Name the output image:ReDNA2
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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
ImageMath:[module_num:7|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notes:['Merge DNA to get max nuclei signal.']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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:10
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:Nucleus
    Image or measurement?:Image
    Select the first image:ReDNA1
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:ReDNA2
    Multiply the second image by:1
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify nuclei.']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
    Select the input image:Nucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:3
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:40
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    Thresholding method:Otsu

ImageMath:[module_num:9|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notes:['Subtract background from membrane.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Membrane
    Image or measurement?:Image
    Select the first image:prob_membrane
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:prob_background
    Multiply the second image by:1
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
IdentifySecondaryObjects:[module_num:10|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notes:['Identify cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:Membrane
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:40
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:11|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notes:['Convert cells to an image.']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
    Select the input objects:Cells
    Name the output image:CellsImage
    Select the color format:uint16
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
SaveImages:[module_num:12|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notes:['Save cell mask making sure to add the suffix of _mask.']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
    Select the type of image to save:Image
    Select the image to save:CellsImage
    Select method for constructing file names:Single name
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    Enter single file name:Cells_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|Pipeline_Optimisation/currentpipeline_28.02.19/BRAC2415.3bROI1/results
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['Measure object sizes.']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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

MeasureObjectIntensity Multichannel:[module_num:14|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notes:['Measure channel intensities for each cell object.']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
    Hidden:22
    Select an image to measure:DNA1
    Select an image to measure:DNA2
    Select an image to measure:_141Pr
    Select an image to measure:_142Nd
    Select an image to measure:_146Nd
    Select an image to measure:_147Sm
    Select an image to measure:_148Nd
    Select an image to measure:_150Nd
    Select an image to measure:_151Eu
    Select an image to measure:_152Sm
    Select an image to measure:_154Sm
    Select an image to measure:_156Gd
    Select an image to measure:_161Dy
    Select an image to measure:_164Dy
    Select an image to measure:_165Ho
    Select an image to measure:_168Er
    Select an image to measure:_169Tm
    Select an image to measure:_172Yb
    Select an image to measure:_173Yb
    Select an image to measure:_176Yb
    Select an image to measure:_209Bi
    Select an image to measure:_89Y
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Select objects to measure:Cells

ExportToSpreadsheet:[module_num:15|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notes:['Export csv file containing all the data. (Can modify to export info on nuclear objects, the pipeline modules used etc… ', ' ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Pipeline_Optimisation/currentpipeline_28.02.19/BRAC2415.3bROI1/results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Number_Object_Number,Cells|Intensity_MeanIntensity__156Gd_c1,Cells|Intensity_MeanIntensity__176Yb_c1,Cells|Intensity_MeanIntensity__173Yb_c1,Cells|Intensity_MeanIntensity__164Dy_c1,Cells|Intensity_MeanIntensity__209Bi_c1,Cells|Intensity_MeanIntensity__161Dy_c1,Cells|Intensity_MeanIntensity__150Nd_c1,Cells|Intensity_MeanIntensity__89Y_c1,Cells|Intensity_MeanIntensity__169Tm_c1,Cells|Intensity_MeanIntensity__154Sm_c1,Cells|Intensity_MeanIntensity__172Yb_c1,Cells|Intensity_MeanIntensity__142Nd_c1,Cells|Intensity_MeanIntensity__152Sm_c1,Cells|Intensity_MeanIntensity__141Pr_c1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
